//execute1("celltypes.element(\"Cell1\")")

begintemplate Cell1
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target, nclist, vslist, tlist

public soma, dend, axon
public all, somatic, axonal, basal

objref synlist, nclist, vslist, tlist

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist = new List()
  nclist = new List()
  vslist = new List()
  tlist = new List()
  synapses()
  x = y = z = 0 // only change via position
}

create soma, dend[94], axon[71]

proc topol() { local i
  connect dend(0), soma(0.5)
  for i = 1, 6 connect dend[i](0), dend[i-1](1)
  connect dend[7](0), dend[5](1)
  connect dend[8](0), dend[4](1)
  connect dend[9](0), dend[3](1)
  connect dend[10](0), dend[2](1)
  connect dend[11](0), dend[1](1)
  connect dend[12](0), dend(1)
  for i = 13, 14 connect dend[i](0), dend[i-1](1)
  connect dend[15](0), dend[13](1)
  connect dend[16](0), dend[12](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  connect dend[19](0), soma(0.5)
  for i = 20, 27 connect dend[i](0), dend[i-1](1)
  connect dend[28](0), dend[26](1)
  connect dend[29](0), dend[25](1)
  connect dend[30](0), dend[24](1)
  connect dend[31](0), dend[23](1)
  connect dend[32](0), dend[22](1)
  connect dend[33](0), dend[21](1)
  connect dend[34](0), dend[20](1)
  for i = 35, 36 connect dend[i](0), dend[34](1)
  connect dend[37](0), dend[19](1)
  for i = 38, 39 connect dend[i](0), dend[i-1](1)
  connect dend[40](0), dend[38](1)
  connect dend[41](0), dend[37](1)
  for i = 42, 43 connect dend[i](0), dend[i-1](1)
  connect dend[44](0), dend[42](1)
  connect dend[45](0), dend[41](1)
  connect dend[46](0), soma(0.5)
  for i = 47, 50 connect dend[i](0), dend[i-1](1)
  connect dend[51](0), dend[49](1)
  connect dend[52](0), dend[48](1)
  connect dend[53](0), dend[47](1)
  for i = 54, 56 connect dend[i](0), dend[i-1](1)
  connect dend[57](0), dend[55](1)
  connect dend[58](0), dend[54](1)
  connect dend[59](0), dend[53](1)
  for i = 60, 61 connect dend[i](0), dend[i-1](1)
  connect dend[62](0), dend[60](1)
  for i = 63, 64 connect dend[i](0), dend[62](1)
  connect dend[65](0), dend[59](1)
  connect dend[66](0), dend[46](1)
  connect dend[67](0), soma(0.5)
  for i = 68, 71 connect dend[i](0), dend[i-1](1)
  connect dend[72](0), dend[70](1)
  connect dend[73](0), dend[69](1)
  connect dend[74](0), dend[68](1)
  for i = 75, 76 connect dend[i](0), dend[74](1)
  connect dend[77](0), dend[67](1)
  connect dend[78](0), soma(0.5)
  for i = 79, 81 connect dend[i](0), dend[i-1](1)
  connect dend[82](0), dend[80](1)
  connect dend[83](0), dend[79](1)
  connect dend[84](0), dend[78](1)
  connect dend[85](0), soma(0.5)
  for i = 86, 89 connect dend[i](0), dend[i-1](1)
  connect dend[90](0), dend[88](1)
  connect dend[91](0), dend[87](1)
  connect dend[92](0), dend[86](1)
  connect dend[93](0), dend[85](1)
  connect axon(0), soma(0.5)
  for i = 1, 7 connect axon[i](0), axon[i-1](1)
  connect axon[8](0), axon[6](1)
  for i = 9, 10 connect axon[i](0), axon[8](1)
  for i = 11, 12 connect axon[i](0), axon[10](1)
  connect axon[13](0), axon[5](1)
  for i = 14, 15 connect axon[i](0), axon[13](1)
  for i = 16, 17 connect axon[i](0), axon[15](1)
  connect axon[18](0), axon[4](1)
  for i = 19, 20 connect axon[i](0), axon[18](1)
  for i = 21, 22 connect axon[i](0), axon[20](1)
  connect axon[23](0), axon[3](1)
  connect axon[24](0), axon[2](1)
  for i = 25, 30 connect axon[i](0), axon[i-1](1)
  connect axon[31](0), axon[29](1)
  connect axon[32](0), axon[28](1)
  for i = 33, 34 connect axon[i](0), axon[32](1)
  for i = 35, 36 connect axon[i](0), axon[i-1](1)
  connect axon[37](0), axon[35](1)
  for i = 38, 41 connect axon[i](0), axon[i-1](1)
  connect axon[42](0), axon[40](1)
  for i = 43, 44 connect axon[i](0), axon[42](1)
  connect axon[45](0), axon[39](1)
  for i = 46, 47 connect axon[i](0), axon[i-1](1)
  connect axon[48](0), axon[46](1)
  connect axon[49](0), axon[45](1)
  connect axon[50](0), axon[38](1)
  connect axon[51](0), axon[37](1)
  for i = 52, 53 connect axon[i](0), axon[51](1)
  connect axon[54](0), axon[34](1)
  connect axon[55](0), axon[27](1)
  for i = 56, 57 connect axon[i](0), axon[i-1](1)
  connect axon[58](0), axon[56](1)
  for i = 59, 60 connect axon[i](0), axon[i-1](1)
  connect axon[61](0), axon[59](1)
  for i = 62, 63 connect axon[i](0), axon[61](1)
  connect axon[64](0), axon[58](1)
  connect axon[65](0), axon[55](1)
  connect axon[66](0), axon[26](1)
  connect axon[67](0), axon[25](1)
  connect axon[68](0), axon[24](1)
  connect axon[69](0), axon[1](1)
  connect axon[70](0), axon(1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(3.09588, 17.8003, 0.7, 18.156)
	pt3dadd(12.1739, 17.8003, 0.7, 18.156)
	pt3dadd(21.2519, 17.8003, 0.7, 18.156)
  }
  dend {pt3dclear()
	pt3dstyle(1, 12.1739, 17.8003, 0.7)
	pt3dadd(9.05, 11.3, 3.3, 2.12)
	pt3dadd(7.88, 9.47, 3.3, 2.12)
	pt3dadd(6.21, 7.64, 3.3, 2.12)
	pt3dadd(4.7, 6.31, 3.3, 1.95)
	pt3dadd(3.86, 4.48, 3.3, 1.95)
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  }
}
proc shape3d_2() {
  dend[8] {	pt3dadd(-79.85, -133.9, -33.2, 1.14)
	pt3dadd(-80.35, -136.72, -33.2, 1.14)
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  }
}
proc shape3d_3() {
  dend[14] {	pt3dadd(11.24, -121.78, -10.76, 1.3)
	pt3dadd(9.9, -126.59, -10.99, 1.3)
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  }
}
proc shape3d_4() {
  dend[20] {	pt3dadd(-8.05, 13.29, 9.66, 1.79)
  }
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  }
}
proc shape3d_5() {
  dend[32] {	pt3dadd(-37.91, -7.48, 3.06, 1.14)
	pt3dadd(-42.27, -12.79, -0.23, 1.14)
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  }
}
proc shape3d_6() {
  dend[43] {	pt3dadd(44.11, 94.52, -20.65, 1.14)
	pt3dadd(50.33, 95.19, -27.24, 1.14)
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  }
}
proc shape3d_7() {
  dend[56] {	pt3dadd(-8.38, -103.33, -40.66, 1.14)
	pt3dadd(-6.71, -109.64, -40.66, 1.14)
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  }
}
proc shape3d_8() {
  dend[64] {	pt3dadd(163.89, -50.83, -21.11, 1.14)
	pt3dadd(163.55, -52.5, -21.11, 1.14)
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  }
}
proc shape3d_9() {
  dend[74] {	pt3dadd(16.19, 1.33, 18.45, 1.14)
	pt3dadd(17.2, 2.66, 21.74, 1.14)
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  }
}
proc shape3d_10() {
  dend[82] {	pt3dadd(30.79, 62.13, 44.62, 1.3)
	pt3dadd(32.63, 65.29, 44.62, 1.3)
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  }
}
proc shape3d_11() {
  dend[90] {	pt3dadd(4.78, 108.31, -6.59, 1.14)
	pt3dadd(5.46, 110.97, -6.59, 1.14)
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  }
}
proc shape3d_12() {
  axon[4] {	pt3dadd(462.41, -147.73, 12.32, 1.14)
	pt3dadd(465.26, -146.73, 9.02, 1.14)
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  }
}
proc shape3d_13() {
  axon[22] {	pt3dadd(570.1, -127.97, -11.22, 0.98)
	pt3dadd(577.82, -126.97, -18.02, 0.98)
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  }
}
proc shape3d_14() {
  axon[37] {	pt3dadd(74.07, -37.26, 53.85, 0.98)
	pt3dadd(73.89, -35.27, 53.85, 0.98)
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  }
}
proc shape3d_15() {
  axon[59] {	pt3dadd(-4.27, -84.77, 21.74, 0.98)
	pt3dadd(-7.13, -92.08, 21.74, 0.98)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    for i=0, 93 dend[i] all.append()
    for i=0, 70 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 70 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 93 dend[i] basal.append()

}
proc geom() {
}
external lambda_f
proc geom_nseg() {
}
proc biophys() {
  soma{
	insert km
	insert kv
	insert na
	insert pas
	insert ih
  }
  
  for i=0, 93 dend[i]{
	insert pas
	insert ih

  }	
  for i=0, 70 axon[i]{
	insert km
	insert kv
	insert na	
	insert pas
  }	
}
proc biophys_inhomo(){}
proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
proc synapses() {}
endtemplate Cell1
